CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:424
GitHash:
ModuleCount:16
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:2
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "d0")
    Name to assign these images:DAPI
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "d1")
    Name to assign these images:nkx_2
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
Crop:[module_num:5|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enabled:False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
    Select the input image:DAPI
    Name the output image:CropBlue
    Select the cropping shape:Rectangle
    Select the cropping method:Coordinates
    Apply which cycle's cropping pattern?:Every
    Left and right rectangle positions:0,end
    Top and bottom rectangle positions:0,end
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    Remove empty rows and columns?:All
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
IdentifyPrimaryObjects:[module_num:6|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
    Select the input image:DAPI
    Name the primary objects to be identified:PreNuclei
    Typical diameter of objects, in pixel units (Min,Max):16,70
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Propagate
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:0.7
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
MeasureObjectSizeShape:[module_num:7|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
    Select object sets to measure:PreNuclei
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:No

DisplayDataOnImage:[module_num:8|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
    Display object or image measurements?:Object
    Select the input objects:PreNuclei
    Measurement to display:AreaShape_FormFactor
    Select the image on which to display the measurements:DAPI
    Text color:red
    Name the output image that has the measurements displayed:Nuclei_FormFactor
    Font size (points):14
    Number of decimals:2
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes
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    Font:Agency FB
    Use scientific notation?:No
    Font weight:normal

FilterObjects:[module_num:9|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
    Select the objects to filter:PreNuclei
    Name the output objects:Nuclei
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:AreaShape_FormFactor
    Filter using a minimum measurement value?:Yes
    Minimum value:0.599
    Filter using a maximum measurement value?:No
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
MeasureObjectIntensity:[module_num:10|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
    Select images to measure:nkx_2
    Select objects to measure:Nuclei

DisplayDataOnImage:[module_num:11|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
    Display object or image measurements?:Object
    Select the input objects:Nuclei
    Measurement to display:Intensity_IntegratedIntensity_nkx_2
    Select the image on which to display the measurements:nkx_2
    Text color:magenta
    Name the output image that has the measurements displayed:NKX2_intensity
    Font size (points):14
    Number of decimals:3
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes
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    Font:Agency FB
    Use scientific notation?:No
    Font weight:normal

FilterObjects:[module_num:12|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
    Select the objects to filter:Nuclei
    Name the output objects:NKXpos_Nuclei
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:Intensity_IntegratedIntensity_nkx_2
    Filter using a minimum measurement value?:Yes
    Minimum value:0.062
    Filter using a maximum measurement value?:Yes
    Maximum value:1.0
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
ClassifyObjects:[module_num:13|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
    Make classification decision based on:Single measurement
    Hidden:1
    Hidden:1
    Select the object to be classified:Nuclei
    Select the measurement to classify by:Intensity_IntegratedIntensity_nkx_2
    Select bin spacing:Custom-defined bins
    Number of bins:3
    Lower threshold:0.0
    Use a bin for objects below the threshold?:Yes
    Upper threshold:1.0
    Use a bin for objects above the threshold?:Yes
    Enter the custom thresholds separating the values between bins:0, 0.060
    Give each bin a name?:No
    Enter the bin names separated by commas:S0X10 neg, SOX10 ps
    Retain an image of the classified objects?:Yes
    Name the output image:Classified_NKX_Nuclei
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    Name the output objects:ClassifiedObjects
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    Method to select the cutoff:Mean
    Enter the cutoff value:0.5
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    Method to select the cutoff:Mean
    Enter the cutoff value:0.5
    Use custom names for the bins?:No
    Enter the low-low bin name:low_low
    Enter the low-high bin name:low_high
    Enter the high-low bin name:high_low
    Enter the high-high bin name:high_high
    Retain an image of the classified objects?:No
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    Save classes as new object sets?:No
    Select the location of the classifier model file:Default Output Folder|None
    Rules or classifier file name:None
    Allow fuzzy feature matching?:No

SaveImages:[module_num:14|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
    Select the type of image to save:Image
    Select the image to save:Classified_NKX_Nuclei
    Select method for constructing file names:From image filename
    Select image name for file prefix:nkx_2
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:Classified_NKX_Nuclei
    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

SaveImages:[module_num:15|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
    Select the type of image to save:Image
    Select the image to save:NKX2_intensity
    Select method for constructing file names:From image filename
    Select image name for file prefix:nkx_2
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_NKX_intensity
    Saved file format:png
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

ExportToSpreadsheet:[module_num:16|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
    Select the column delimiter:Tab
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    Press button to select measurements:Image|ModuleError_04Groups,Image|ModuleError_01Images,Image|ModuleError_02Metadata,Image|ModuleError_03NamesAndTypes,Image|ExecutionTime_03NamesAndTypes,Image|ExecutionTime_01Images,Image|ExecutionTime_04Groups,Image|ExecutionTime_02Metadata,Image|FileName_nkx_2,Image|FileName_DAPI,Image|Count_NKXpos_Nuclei,Image|Count_Nuclei,Image|Count_PreNuclei,Nuclei|Intensity_IntegratedIntensity_nkx_2,NKXpos_Nuclei|Parent_Nuclei,NKXpos_Nuclei|Number_Object_Number
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:MyExpt_
    Overwrite existing files without warning?:No
    Data to export:Nuclei
    Combine these object measurements with those of the previous object?:Yes
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    Use the object name for the file name?:Yes
    Data to export:Image
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
